---
API: 2.1
OpenSesame: 3.3.12
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "SlimStampen example"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\stefa\\Uni\\UM\\group-project-team-getcreative"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background white

define loop block_with_images
	set source table
	set repeat 1001
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous yes
	set break_if_on_first no
	set break_if "[time_up] = yes"
	setcycle 0 ignore_this_variable 1
	run trial_sequence_with_images

define loop block_with_images_after_error
	set source table
	set repeat 1000
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous yes
	set break_if_on_first no
	set break_if "[time_up] = yes"
	setcycle 0 ignore_this_variable 1
	run trial_sequence_with_images_after_error

define loop block_without_images
	set source table
	set repeat 1000
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[time_up] = yes"
	setcycle 0 ignore_this_variable 1
	run trial_sequence_without_images

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run slimstampen_setup always
	run instructions always
	run learning_session_setup always
	run block_without_images always
	run save_data always

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="During this experiment, you will be shown English words that you have to translate to Swahili. The Swahilian translation of the word is given when a new word is presented for the first time. <br />For each word, try to type the Swahili translation without any mistakes. Being correct is more important than being fast. <br />Good luck!<br />" x=0 y=-2 z_index=0

define sketchpad instructions_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In this block, you will be shown English words that you have to translate to Swahili. The Swahilian translation of the word is given when a new word is presented for the first time. <br />For each word, try to type the Swahili translation without any mistakes. <br />Good luck!<br />" x=0 y=0 z_index=0

define sketchpad instructions_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In this block, you will be shown English words that you have to translate to Swahili. The Swahilian translation of the word is given when a new word is presented for the first time. <br />For each word, try to type the Swahili translation without any mistakes. <br />Good luck!<br />" x=0 y=0 z_index=0

define inline_script learning_session_setup
	set description "Executes Python code"
	___run__
	# Start the clock
	var.session_start_time = clock.time()
	
	# Session will run until time_up == True
	var.time_up = False
	
	# Keep track of trial number
	var.trial_num = 1
	
	# Settings
	var.session_duration = 6000
	var.feedback_duration = 800
	var.inter_trial_interval = 200
	var.keep_count = 0
	
	#initialize activation-functions
	var.a = 0
	
	#initialize activation-counters (default = 10)
	var.counter_with = 0
	var.counter_without = 0
	__end__
	set _prepare ""

define sketchpad main_instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Welcome!<br /><br />This experiment consists of three tasks. In these tasks, you are asked to discriminate between the following: shapes, colors, and letters/numbers. <br /><br />Each block will start with more detailed instructions and a short practice session to get familiar with the task.<br /><br />Please press a key to continue." x=0 y=0 z_index=0

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"

define inline_script present_trial
	set description "Executes Python code"
	___run__
	import numpy as np
	import math
	
	def distance(a, b):
	    if (a == b):
	        return 0
	    elif (a < 0) and (b < 0) or (a > 0) and (b > 0):
	        if (a < b):
	            return (abs(abs(a) - abs(b)))
	        else:
	            return -(abs(abs(a) - abs(b)))
	    else:
	        return math.copysign((abs(a) + abs(b)),b)
									
	var.time_up = False
	trial_start_time = clock.time()
	
	# Current fact (0 = without, 1 = with)
	current = 0
	
	# Get next fact from the model
	#First 15 trials, the given facts are random "with" or "without"
	if var.trial_num < 15:
		if random.randint(1,10) <= 5:
			next_fact, new = model.get_next_fact(current_time = trial_start_time, version = "with")
			current = 0
		else: 
			next_fact, new = model.get_next_fact(current_time = trial_start_time, version = "without")
			current = 1
	#After 6 trials, not random anymore
	else:
		if random.uniform(0.0,1.0) < var.a:
			next_fact, new = model.get_next_fact(current_time = trial_start_time, version = "with")
			current = 0
		else: 
			next_fact, new = model.get_next_fact(current_time = trial_start_time, version = "without")
			current = 1
		
	prompt = next_fact.question
	answer = next_fact.answer
	
	img_name = str(next_fact.fact_id) + ".png"
	img_name = exp.get_file(img_name)
	# Show prompt
	
	my_canvas = Canvas(color = 'black', background_color = 'white')
	my_canvas.text(prompt, font_size = 30)
	if current == 1:
		my_canvas.image(img_name, True, y = -200, scale = 0.3)
	if new:
		my_canvas.text(answer, y = 50, font_size = 20)
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		# Update what's on screen'
		my_canvas = Canvas(color = 'black', background_color = 'white')
		my_canvas.text(prompt, font_size = 30)
		if current == 1:
			my_canvas.image(img_name, True, y = -200, scale = 0.3)
		if new:
			my_canvas.text(answer, y = 50, font_size = 20)
		my_canvas.text(keyboard_response, y = 100)
		my_canvas.show()
	
	# Check if the response is correct
	correct = keyboard_response == answer
	
	# Log response
	if current == 0:
		response = Response(next_fact, trial_start_time, rt, correct, "without", var.a)
	else:
		response = Response(next_fact, trial_start_time, rt, correct, "without", var.a)
		
	model.register_response(response) 
	
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.text(keyboard_response, y = 100, color = feedback_color)
	if not correct:
		my_canvas.text(answer, y = 150)
		if not new:
			if current == 0:
				var.counter_without -= 1
			else: 
				var.counter_with -= 1
	else:
		if not new:
			if current == 0:
				var.counter_without += 1
			else: 
				var.counter_with += 1
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas = Canvas(color = 'black', background_color = 'white')
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	# Check if time is up
	if clock.time() - var.session_start_time - (var.keep_count*var.session_duration) >= var.session_duration:
		var.time_up = True
		var.keep_count += 1
		
	# Increment trial number
	var.trial_num += 1
	
	#update sigmoid activation function
	x = distance(var.counter_with, var.counter_without)
	var.a = 1 / (1 + np.exp(-x))
	
	print("a: ", var.a)
	print("x: ", x)
	print("counter_without: ", var.counter_without)
	print("counter_with: ", var.counter_with)
	__end__
	set _prepare ""

define inline_script present_trial_with_images
	set description "Executes Python code"
	___run__
	var.time_up = False
	trial_start_time = clock.time()
	import time as misschien
	
	# Get next fact from the model
	next_fact, new = model.get_next_fact(current_time = trial_start_time, version = "with")
	prompt = next_fact.question
	answer = next_fact.answer
	
	# Show prompt
	my_canvas = Canvas(color = 'black', background_color = 'white')
	my_canvas.text(prompt, font_size = 30)
	img_name = str(next_fact.fact_id) + ".png"
	img_name = exp.get_file(img_name)
	my_canvas.image(img_name, True, y = -200, scale = 0.3)
	if new:
		my_canvas.text(answer, y = 50, font_size = 20)
	# my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas = Canvas(color = 'black', background_color = 'white')
		my_canvas.text(prompt, font_size = 30)
		my_canvas.image(img_name, True, y = -200, scale = 0.3)
		if new:
			my_canvas.text(answer, y = 50, font_size = 20)
		my_canvas.text(keyboard_response, y = 100)
		# my_canvas.prepare()
		my_canvas.show()
	
	
	# Check if the response is correct
	correct = keyboard_response == answer
	
	# Log response
	response = Response(next_fact, trial_start_time, rt, correct, "with")
	model.register_response(response) 
	
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.text(keyboard_response, y = 100, color = feedback_color)
	if not correct:
		my_canvas.text(answer, y = 150)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	# Check if time is up
	if clock.time() - var.session_start_time - (var.keep_count*var.session_duration) >= var.session_duration:
		var.time_up = True
		
	# Increment trial number
	var.trial_num += 1
	__end__
	set _prepare ""

define inline_script present_trial_with_images_after_error
	set description "Executes Python code"
	___run__
	var.time_up = False
	trial_start_time = clock.time()
	
	# Get next fact from the model
	next_fact, new = model.get_next_fact(current_time = trial_start_time, "with")
	prompt = next_fact.question
	answer = next_fact.answer
	
	# Show prompt
	my_canvas = Canvas(color = 'black', background_color = 'white')
	my_canvas.text(prompt, font_size = 30)
	if new:
		my_canvas.text(answer, y = 50, font_size = 20)
	else:
		check = model.get_response(next_fact)
		if check == False:
			img_name = str(next_fact.fact_id) + ".png"
			img_name = exp.get_file(img_name)
			my_canvas.image(img_name, True, y = -200, scale = 0.3)
	my_canvas.prepare()
	my_canvas.show()
	
	# Listen for keyboard input and show keypresses on screen as they occur
	my_keyboard = Keyboard()
	keyboard_response = ""
	erased_answer = False
	rt = float("inf")
	
	# Keep listening for key presses until the user presses Enter
	while True:
		key, time = my_keyboard.get_key()
		
		# The first keypress determines the response time
		if keyboard_response == "" and not erased_answer:
			rt = clock.time() - trial_start_time
		
		if key == "return":
			break
			
		if key == "backspace":
			keyboard_response = keyboard_response[:-1]
			# If the answer is completely erased, the RT is no longer informative
			if keyboard_response == "":
				erased_answer = True
				rt = float("inf")
		
		elif key == "space":
			keyboard_response += " "
		
		else:
			keyboard_response += my_keyboard.to_chr(key)
	
		# Update what's on screen'
		my_canvas.clear()
		my_canvas.text(prompt, font_size = 30)
		if new:
			my_canvas.text(answer, y = 50, font_size = 20)
		else:
			check = model.get_response(next_fact)
			if check == False:
				img_name = str(next_fact.fact_id) + ".png"
				img_name = exp.get_file(img_name)
				my_canvas.image(img_name, True, y = -200, scale = 0.3)
		my_canvas.text(keyboard_response, y = 100)
		my_canvas.prepare()
		my_canvas.show()
	
	
	# Check if the response is correct
	correct = keyboard_response == answer
	
	# Log response
	response = Response(next_fact, trial_start_time, rt, correct)
	model.register_response(response) 
	
	# Show feedback
	feedback_color = "green" if correct else "red"
	my_canvas.text(keyboard_response, y = 100, color = feedback_color)
	if not correct:
		my_canvas.text(answer, y = 150)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.feedback_duration)
	
	# Clear the screen between trials
	my_canvas.clear()
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(var.inter_trial_interval)
	
	# Check if time is up
	if clock.time() - var.session_start_time - (var.keep_count*var.session_duration) >= var.session_duration:
		var.time_up = True
		var.keep_count += 1
		
	# Increment trial number
	var.trial_num += 1
	__end__
	set _prepare ""

define inline_script save_data
	set description "Executes Python code"
	___run__
	# Write the SlimStampen data to the OpenSesame log file
	dat = model.export_data()
	log.write(dat)
	__end__
	set _prepare ""

define inline_script slimstampen_setup
	set description "Executes Python code"
	___run__
	import random
	
	model = SpacingModel()
	
	# Add some study facts to the model (you could also read them from a CSV file)
	facts= [Fact(1, "five", "tano"),
			Fact(2, "woman", "mwanamke"),
			Fact(3, "fish", "samaki"),
			Fact(4, "bird", "ndege"),
			Fact(5, "dog", "mbwa"),
			Fact(6, "snake", "nyoka"),
			Fact(7, "tree", "mti"),
			Fact(8, "leaf", "jani"),
			Fact(9, "egg", "yai"),
			Fact(11, "feather", "unyoya"),
			Fact(12, "foot", "mguu"),
			Fact(13, "eye", "jicho"),
			Fact(14, "heart", "moyo"),
			Fact(16, "moon", "mwezi"),
			Fact(17, "sea", "bahari"),
			Fact(18, "sand", "mchanga"),
			Fact(19, "cloud", "wingu"),
			Fact(20, "snow", "theluji"),
			Fact(21, "fire", "moto"),
			Fact(22, "smoke", "moshinyoka"),
			Fact(23, "mountain", "mlima"),
			Fact(24, "house", "nyumba"),
			Fact(25, "picture", "picha"),
			Fact(26, "plant", "kupanda"),
			Fact(27, "city", "mji"),
			Fact(28, "book", "kitabu"),
			Fact(30, "ship", "meli"),
			Fact(31, "wheel", "gurudumu"),
			Fact(32, "plane", "ndege"),
			Fact(33, "table", "meza"),
			Fact(34, "money", "fedha"),
			Fact(35, "bed", "kitanda"),
			Fact(37, "train", "treni"),
			Fact(38, "window", "dirisha"),
			Fact(40, "bear", "kubeba"),
			Fact(41, "garden", "bustani"),
			Fact(42, "key", "ufunguo"),
			Fact(43, "cat", "paka"),
			Fact(45, "soldier", "askari"),
			Fact(46, "dollar", "dola"),
			Fact(48, "gun", "bunduki"),
			Fact(49, "duck", "bata"),
			Fact(50, "magnet", "sumaku"),
			Fact(52, "giraffe", "twiga"),
			Fact(53, "elephant", "tembo"),
			Fact(54, "lion", "simba"),
			Fact(55, "zebra", "punda milia"),
			Fact(56, "calendar", "kalenda"),
			Fact(57, "coffee", "kahawa"),
			Fact(58, "beer", "pombe"),
			Fact(59, "tea", "chai"),
			Fact(60, "wine", "mvinyo"),
			Fact(61, "lightning", "umeme"),
			Fact(62, "sheep", "kondoo"),
			Fact(63, "kettle", "birika"),
			Fact(65, "knife", "kisu"),
			Fact(66, "fork", "uma"),
			Fact(67, "bread", "mkate"),
			Fact(68, "cheese", "jibini"),
			Fact(69, "shirt", "shati"),
			Fact(70, "skirt", "sketi"),
			Fact(71, "shoe", "kiatu"),
			Fact(72, "glove", "glavu"),
			Fact(73, "ring", "pete"),
			Fact(74, "necklace", "mkufu"),
			Fact(75, "brush", "burashi"),
			Fact(76, "spade", "sepetu"),
			Fact(77, "rake", "reki"),
			Fact(78, "scissors", "mkasi"),
			Fact(79, "banana", "ndizi"),
			Fact(80, "coconut", "nazi"),
			Fact(81, "saw", "msemeno"),
			Fact(82, "hammer", "nyundo"),
			Fact(83, "anchor", "nanga"),
			Fact(84, "bridge", "daraja"),
			Fact(85, "flute", "filimbi"),
			Fact(86, "drum", "ngoma"),
			Fact(87, "trumpet", "tarumbeta"),
			Fact(88, "bicycle", "baisikeli"),
			Fact(89, "carrot", "karoti"),
			Fact(90, "church", "kanisa"),
			Fact(91, "chicken", "kuku"),
			Fact(92, "chair", "kiti"),
			Fact(93, "tomato", "nyanya"),
			Fact(94, "potato", "viazi"),
			Fact(95, "gift", "zawadi"),
			Fact(96, "hurricane", "kimbunga"),
			Fact(97, "helicopter", "helikopta"),
			Fact(98, "guitar", "gitaa"),
			Fact(99, "island", "kisiwa"),
			Fact(100, "motorcycle", "pikipiki"),
			Fact(101, "monkey", "tumbili"),
			Fact(102, "painting", "uchoraji"),
			Fact(103, "shower", "kuoga"),
			Fact(104, "spider", "buibui"),
			Fact(105, "umbrella", "mqavuli"),
			]
	
	random.shuffle(facts)
	count = 1
	for fact in facts:
		if count <= 49:
			model.add_fact(fact, "without")
		else :
			model.add_fact(fact, "with")
		count += 1
	__end__
	___prepare__
	from __future__ import division
	import math
	import pandas as pd
	from collections import namedtuple
	
	Fact = namedtuple("Fact", "fact_id, question, answer")
	Response = namedtuple("Response", "fact, start_time, rt, correct, version, activation")
	Encounter = namedtuple("Encounter", "activation, time, reaction_time, decay")
	
	
	class SpacingModel(object):
	
	    # Model constants
	    LOOKAHEAD_TIME = 15000
	    FORGET_THRESHOLD = -0.8
	    DEFAULT_ALPHA = 0.3
	    C = 0.25
	    F = 1.0
	
	    def __init__(self):
	        self.facts = []
	        self.image_facts = []
	        self.responses = []
	
	    def add_fact(self, fact, version):
	        # type: (Fact) -> None
	        """
	        Add a fact to the list of study items.
	        """
	        if version == "without":
	            # Ensure that a fact with this ID does not exist already
	            if next((f for f in self.facts if f.fact_id == fact.fact_id), None):
	                raise RuntimeError(
	                    "Error while adding fact: There is already a fact with the same ID: {}. Each fact must have a unique ID".format(fact.fact_id))
	
	            self.facts.append(fact)
	        else: 
	            # Ensure that a fact with this ID does not exist already
	            if next((f for f in self.image_facts if f.fact_id == fact.fact_id), None):
	                raise RuntimeError(
	                    "Error while adding fact: There is already a fact with the same ID: {}. Each fact must have a unique ID".format(fact.fact_id))
	
	            self.image_facts.append(fact)
	
	    def get_response(self, f):
	        check = True
	        for r in self.responses:
	            if r.fact == f:
	                check = r.correct
	        return check
	    
	    def register_response(self, response):
	        # type: (Response) -> None
	        """
	        Register a response.
	        """
	        # Prevent duplicate responses
	        if next((r for r in self.responses if r.start_time == response.start_time), None):
	            raise RuntimeError(
	                "Error while registering response: A response has already been logged at this start_time: {}. Each response must occur at a unique start_time.".format(response.start_time))
	
	        self.responses.append(response)
	
	
	    def get_next_fact(self, current_time, version):
	        # type: (int) -> (Fact, bool)
	        """
	        Returns a tuple containing the fact that needs to be repeated most urgently and a boolean indicating whether this fact is new (True) or has been presented before (False).
	        If none of the previously studied facts needs to be repeated right now, return a new fact instead.
	        """
	        if version == "without":
	            # Calculate all fact activations in the near future
	            fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.facts]
	
	            seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	            not_seen_facts = [(f, a) for (f, a) in fact_activations if a == -float("inf")]
	
	            # Prevent an immediate repetition of the same fact
	            if len(seen_facts) > 2:
	                last_response = self.responses[-1]
	                seen_facts = [(f, a) for (f, a) in seen_facts if f.fact_id != last_response.fact.fact_id]
	
	            # Reinforce the weakest fact with an activation below the threshold
	            seen_facts_below_threshold = [(f, a) for (f, a) in seen_facts if a < self.FORGET_THRESHOLD]
	            if len(not_seen_facts) == 0 or len(seen_facts_below_threshold) > 0:
	                weakest_fact = min(seen_facts, key = lambda t: t[1])
	                return((weakest_fact[0], False))
	
	            # If none of the previously seen facts has an activation below the threshold, return a new fact
	            return((not_seen_facts[0][0], True))
	        else:
	            # Calculate all fact activations in the near future
	            fact_activations = [(f, self.calculate_activation(current_time + self.LOOKAHEAD_TIME, f)) for f in self.image_facts]
	
	            seen_facts = [(f, a) for (f, a) in fact_activations if a > -float("inf")]
	            not_seen_facts = [(f, a) for (f, a) in fact_activations if a == -float("inf")]
	
	            # Prevent an immediate repetition of the same fact
	            if len(seen_facts) > 2:
	                last_response = self.responses[-1]
	                seen_facts = [(f, a) for (f, a) in seen_facts if f.fact_id != last_response.fact.fact_id]
	
	            # Reinforce the weakest fact with an activation below the threshold
	            seen_facts_below_threshold = [(f, a) for (f, a) in seen_facts if a < self.FORGET_THRESHOLD]
	            if len(not_seen_facts) == 0 or len(seen_facts_below_threshold) > 0:
	                weakest_fact = min(seen_facts, key = lambda t: t[1])
	                return((weakest_fact[0], False))
	
	            # If none of the previously seen facts has an activation below the threshold, return a new fact
	            return((not_seen_facts[0][0], True))
	
	
	    def get_rate_of_forgetting(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Return the estimated rate of forgetting of the fact at the specified time
	        """
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(alpha)
	
	
	    def calculate_activation(self, time, fact):
	        # type: (int, Fact) -> float
	        """
	        Calculate the activation of a fact at the given time.
	        """
	
	        encounters = []
	
	        responses_for_fact = [r for r in self.responses if r.fact.fact_id == fact.fact_id and r.start_time < time]
	        alpha = self.DEFAULT_ALPHA
	
	        # Calculate the activation by running through the sequence of previous responses
	        for response in responses_for_fact:
	            activation = self.calculate_activation_from_encounters(encounters, response.start_time)
	            encounters.append(Encounter(activation, response.start_time, self.normalise_reaction_time(response), self.DEFAULT_ALPHA))
	            alpha = self.estimate_alpha(encounters, activation, response, alpha)
	
	            # Update decay estimates of previous encounters
	            encounters = [encounter._replace(decay = self.calculate_decay(encounter.activation, alpha)) for encounter in encounters]
	
	        return(self.calculate_activation_from_encounters(encounters, time))
	
	
	    def calculate_decay(self, activation, alpha):
	        # type: (float, float) -> float
	        """
	        Calculate activation-dependent decay
	        """
	        return self.C * math.exp(activation) + alpha
	
	
	    def estimate_alpha(self, encounters, activation, response, previous_alpha):
	        # type: ([Encounter], float, Response, float) -> float
	        """
	        Estimate the rate of forgetting parameter (alpha) for an item.
	        """
	        if len(encounters) < 3:
	            return(self.DEFAULT_ALPHA)
	
	        a_fit = previous_alpha
	        reading_time = self.get_reading_time(response.fact.question)
	        estimated_rt = self.estimate_reaction_time_from_activation(activation, reading_time)
	        est_diff = estimated_rt - self.normalise_reaction_time(response)
	
	        if est_diff < 0:
	            # Estimated RT was too short (estimated activation too high), so actual decay was larger
	            a0 = a_fit
	            a1 = a_fit + 0.05
	        
	        else:
	            # Estimated RT was too long (estimated activation too low), so actual decay was smaller
	            a0 = a_fit - 0.05
	            a1 = a_fit
	
	        # Binary search between previous fit and proposed alpha
	        for _ in range(6):
	            # Adjust all decays to use the new alpha
	            a0_diff = a0 - a_fit
	            a1_diff = a1 - a_fit
	            d_a0 = [e._replace(decay = e.decay + a0_diff) for e in encounters]
	            d_a1 = [e._replace(decay = e.decay + a1_diff) for e in encounters]
	
	            # Calculate the reaction times from activation and compare against observed RTs
	            encounter_window = encounters[max(1, len(encounters) - 5):]
	            total_a0_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a0, reading_time)
	            total_a1_error = self.calculate_predicted_reaction_time_error(encounter_window, d_a1, reading_time)
	
	            # Adjust the search area based on the lowest total error
	            ac = (a0 + a1) / 2
	            if total_a0_error < total_a1_error:
	                a1 = ac
	            else:
	                a0 = ac
	        
	        # The new alpha estimate is the average value in the remaining bracket
	        return((a0 + a1) / 2)
	
	
	    def calculate_activation_from_encounters(self, encounters, current_time):
	        # type: ([Encounter], int) -> float
	        included_encounters = [e for e in encounters if e.time < current_time]
	
	        if len(included_encounters) == 0:
	            return(-float("inf"))
	
	        return(math.log(sum([math.pow((current_time - e.time) / 1000, -e.decay) for e in included_encounters])))
	
	
	    def calculate_predicted_reaction_time_error(self, test_set, decay_adjusted_encounters, reading_time):
	        # type: ([Encounter], [Encounter], Fact) -> float
	        """
	        Calculate the summed absolute difference between observed response times and those predicted based on a decay adjustment.
	        """
	        activations = [self.calculate_activation_from_encounters(decay_adjusted_encounters, e.time - 100) for e in test_set]
	        rt = [self.estimate_reaction_time_from_activation(a, reading_time) for a in activations]
	        rt_errors = [abs(e.reaction_time - rt) for (e, rt) in zip(test_set, rt)]
	        return(sum(rt_errors))
	
	
	    def estimate_reaction_time_from_activation(self, activation, reading_time):
	        # type: (float, int) -> float
	        """
	        Calculate an estimated reaction time given a fact's activation and the expected reading time 
	        """
	        return((self.F * math.exp(-activation) + (reading_time / 1000)) * 1000)
	
	
	    def get_max_reaction_time_for_fact(self, fact):
	        # type: (Fact) -> float
	        """
	        Return the highest response time we can reasonably expect for a given fact
	        """
	        reading_time = self.get_reading_time(fact.question)
	        max_rt = 1.5 * self.estimate_reaction_time_from_activation(self.FORGET_THRESHOLD, reading_time)
	        return(max_rt)
	
	
	    def get_reading_time(self, text):
	        # type: (str) -> float
	        """
	        Return expected reading time in milliseconds for a given string
	        """
	        word_count = len(text.split())
	
	        if word_count > 1:
	            character_count = len(text)
	            return(max((-157.9 + character_count * 19.5), 300))
	        
	        return(300)
	
	    
	    def normalise_reaction_time(self, response):
	        # type: (Response) -> float
	        """
	        Cut off extremely long responses to keep the reaction time within reasonable bounds
	        """
	        rt = response.rt if response.correct else 60000
	        max_rt = self.get_max_reaction_time_for_fact(response.fact)
	        return(min(rt, max_rt))
	
	
	    def export_data(self, path = None):
	        # type: (str) -> DataFrame
	        """
	        Save the response data to the specified csv file, and return a copy of the pandas DataFrame.
	        If no path is specified, return a CSV-formatted copy of the data instead.
	        """
	
	        def calc_rof(row):
	            return(self.get_rate_of_forgetting(row["start_time"] + 1, row["fact"]))
	
	        dat_resp = pd.DataFrame(self.responses)
	        dat_facts = pd.DataFrame([r.fact for r in self.responses])
	        dat_version = pd.DataFrame([r.version for r in self.responses])
	        dat_activation = pd.DataFrame([r.activation for r in self.responses])
	        dat = pd.concat([dat_resp, dat_facts, dat_version, dat_activation], axis = 1)
	
	        # Add column for rate of forgetting estimate after each observation
	        dat["alpha"] = dat.apply(calc_rof, axis = 1)
	        dat.drop(columns = "fact", inplace = True)
	
	        # Add trial number column
	        dat.index.name = "trial"
	        dat.index = dat.index + 1
	
	        # Save to CSV file if a path was specified, otherwise return the CSV-formatted output
	        if path is not None:
	            dat.to_csv(path, encoding="UTF-8")
	            return(dat)
	        
	        return(dat.to_csv())
	__end__

define sequence trial_sequence_with_images
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_trial_with_images always

define sequence trial_sequence_with_images_after_error
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_trial_with_images_after_error always

define sequence trial_sequence_without_images
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run present_trial always

